<CompuCell3D Revision="20200821" Version="4.2.3">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="200" y="200" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="APC"/>
      <CellType TypeId="2" TypeName="Preactivated"/>
      <CellType TypeId="3" TypeName="Activated"/>
      <CellType TypeId="4" TypeName="Naive"/>
      <CellType TypeId="5" TypeName="Effector"/>
      <CellType TypeId="6" TypeName="Dead"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
   
   <!-- Module tracking neighboring cells of each cell -->
</Plugin>

<Plugin Name="Contact">
   <!-- Specification of adhesion energies -->
   <Energy Type1="Medium" Type2="Medium">10.0</Energy>
   <Energy Type1="Medium" Type2="APC">30.0</Energy>
   <Energy Type1="Medium" Type2="Preactivated">30.0</Energy>
   <Energy Type1="Medium" Type2="Activated">30.0</Energy>
   <Energy Type1="Medium" Type2="Naive">30.0</Energy>
   <Energy Type1="Medium" Type2="Effector">30.0</Energy>
   <Energy Type1="APC" Type2="APC">100.0</Energy>
   <Energy Type1="APC" Type2="Preactivated">50.0</Energy>
   <Energy Type1="APC" Type2="Activated">500.0</Energy>
   <Energy Type1="APC" Type2="Naive">50.0</Energy>
   <Energy Type1="APC" Type2="Effector">500.0</Energy>
   <Energy Type1="Preactivated" Type2="Preactivated">100.0</Energy>
   <Energy Type1="Preactivated" Type2="Activated">100.0</Energy>
   <Energy Type1="Preactivated" Type2="Naive">100.0</Energy>
   <Energy Type1="Preactivated" Type2="Effector">100.0</Energy>
   <Energy Type1="Activated" Type2="Activated">100.0</Energy>
   <Energy Type1="Activated" Type2="Naive">100.0</Energy>
   <Energy Type1="Activated" Type2="Effector">100.0</Energy>
   <Energy Type1="Naive" Type2="Naive">100.0</Energy>
   <Energy Type1="Naive" Type2="Effector">100.0</Energy>
   <Energy Type1="Effector" Type2="Effector">100.0</Energy>
   <Energy Type1="Dead" Type2="Medium">10.0</Energy>
   <Energy Type1="Dead" Type2="APC">30.0</Energy>
   <Energy Type1="Dead" Type2="Preactivated">30.0</Energy>
   <Energy Type1="Dead" Type2="Activated">30.0</Energy>
   <Energy Type1="Dead" Type2="Naive">30.0</Energy>
   <Energy Type1="Dead" Type2="Effector">30.0</Energy>
   <Energy Type1="Dead" Type2="Dead">30.0</Energy>
   <NeighborOrder>2</NeighborOrder>
</Plugin>

<Plugin Name="Volume">

</Plugin>

<Plugin Name="Surface">

</Plugin>


<Plugin Name="Secretion">
   
</Plugin>

<Steppable Type="DiffusionSolverFE">
   
   <!-- Specification of PDE solvers -->
   <DiffusionField Name="IL2">
      <DiffusionData>
         <FieldName>IL2</FieldName>
         <GlobalDiffusionConstant>0.2</GlobalDiffusionConstant>
         <GlobalDecayConstant>0.008</GlobalDecayConstant>
         <!-- Additional options are: -->
         <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
         <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->

      </DiffusionData>

      <BoundaryConditions>
         <Plane Axis="X">
            <ConstantDerivative PlanePosition="Min" Value="0.0"/>
            <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
         </Plane>
         <Plane Axis="Y">
            <ConstantDerivative PlanePosition="Min" Value="0.0"/>
            <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
         </Plane>
      </BoundaryConditions>
   </DiffusionField>

</Steppable>

<Plugin Name="ExternalPotential">
   
   <!-- External force applied to cell. Each cell type has different force. -->
   <!-- For more flexible specification of the constraint (done in Python) please use ExternalPotential plugin without specifying per-type parameters -->
   <!-- Algorithm options are: PixelBased, CenterOfMassBased -->
   <!-- <Algorithm>PixelBased</Algorithm> -->
   <!-- <ExternalPotentialParameters CellType="APC" x="-0.5" y="0.0" z="0.0"/> -->
   <!-- <ExternalPotentialParameters CellType="Preactivated" x="-0.5" y="0.0" z="0.0"/> -->
   <!-- <ExternalPotentialParameters CellType="Activated" x="-0.5" y="0.0" z="0.0"/> -->
   <!-- <ExternalPotentialParameters CellType="Naive" x="-0.5" y="0.0" z="0.0"/> -->
   <!-- <ExternalPotentialParameters CellType="Effector" x="-0.5" y="0.0" z="0.0"/> -->
</Plugin>


</CompuCell3D>
